seqfil = 'hXXXX_S'
//------------------------------
// axAssgn and bioref
//------------------------------
exists('axAssgn','parameter'):$e
if $e < 0.5 then
   create('axAssgn','flag')
endif 
setvalue('axAssgn','1111')

exists('bioref','parameter'):$e
if $e < 0.5 then
   create('bioref','flag')
endif
setvalue('bioref','y') 

setlimit('d1',10,.5,.001)
setlimit('at',0.020,0,1e-06)

//------------------------------
// Spin Rate
//------------------------------

exists('srate','parameter'):$e
if $e < 0.5 then
   create('srate','frequency')
endif 

exists('hsrotor','parameter'):$e
if $e < 0.5 then
   create('hsrotor','flag') 
endif

//==================
// 2D acq parameters
//==================

exists('ni','parameter'):$e
if ($e = 0) then
   create('ni','integer')
endif
setlimit('ni',32767,0,1)

exists('sw1','parameter'):$e
if ($e = 0) then
   create('sw1','real')
   sw1=50000
endif
setlimit('sw1',5e+6,1,parstep[5])

exists('phase','parameter'):$e
if ($e = 0) then
   create('phase','integer')
endif

exists('d2','parameter'):$e
if ($e = 0) then
   create('d2','delay')
   d2 = 0.0
endif
setlimit('d2',0.010,0,1.25e-8)

//==================
// 3D acq parameters
//==================

exists('ni2','parameter'):$e
if ($e = 0) then
   create('ni2','integer')
endif
setlimit('ni2',32767,0,1)

exists('sw2','parameter'):$e
if ($e = 0) then
   create('sw2','real')
   sw2=3000
endif
setlimit('sw2',5e+6,1,parstep[5])

exists('phase2','parameter'):$e
if ($e = 0) then
   create('phase2','integer')
endif
setlimit('phase2',20,0,1)

exists('d3','parameter'):$e
if ($e = 0) then
   create('d3','delay')
   d3 = 0.0
endif
setlimit('d3',0.010,0,1.25e-8)


//==================
// 4D acq parameters
//==================

exists('ni3','parameter'):$e
if ($e = 0) then
   create('ni3','integer')
endif
setlimit('ni3',32767,0,1)

exists('sw3','parameter'):$e
if ($e = 0) then
   create('sw3','real')
   sw3=3000
endif
setlimit('sw3',5e+6,1,parstep[5])

exists('phase3','parameter'):$e
if ($e = 0) then
   create('phase3','integer')
endif
setlimit('phase3',20,0,1)

exists('d4','parameter'):$e
if ($e = 0) then
   create('d4','delay')
   d4 = 0.0
endif
setlimit('d4',0.010,0,1.25e-8)


//------------------------------
// Receiver Delays
//------------------------------

exists('rd','parameter'):$e
if $e < 0.5 then
   create('rd','pulse')
   setlimit('rd',8192,0,0.0125)  
endif 

exists('ad','parameter'):$e
if $e < 0.5 then
   create('ad','pulse')
   setlimit('ad',8192,0,0.0125)  
endif

exists('ddrtc','parameter'):$e
if $e < 0.5 then
   create('ddrtc','pulse')
   setlimit('ddrtc',8192,0,0.0125)  
endif

//------------------------------
// Basic Transmitter Properties
//------------------------------

exists('aX90','parameter'):$e
if $e < 0.5 then
   create('aX90','real')
   setlimit('aX90',4095,0,1)  
endif 

exists('aH90','parameter'):$e
if $e < 0.5 then
   create('aH90','real')
   setlimit('aH90',4095,0,1)  
endif 

exists('aY90','parameter'):$e
if $e < 0.5 then
   create('aY90','real')
   setlimit('aY90',4095,0,1)  
endif

exists('aZ90','parameter'):$e
if $e < 0.5 then
   create('aZ90','real')
   setlimit('aZ90',4095,0,1)  
endif

exists('pwX90','parameter'):$e
if $e < 0.5 then
   create('pwX90','pulse')
   setlimit('pwX90',8192,0,0.0125)
endif 

exists('pwH90','parameter'):$e
if $e < 0.5 then
   create('pwH90','pulse')
   setlimit('pwH90',8192,0,0.0125)
endif 

exists('pwY90','parameter'):$e
if $e < 0.5 then
   create('pwY90','pulse')
   setlimit('pwY90',8192,0,0.0125)
endif

exists('pwZ90','parameter'):$e
if $e < 0.5 then
   create('pwZ90','pulse')
   setlimit('pwZ90',8192,0,0.0125)
endif

//---------------
// cpHX elements
//---------------

exists('shHX','parameter'):$e
if $e < 0.5 then
    create('shHX','flag')
endif

exists('toHX','parameter'):$e
if $e < 0.5 then
   create('toHX','flag')
endif 
setvalue('toHX','obs')

exists('frHX','parameter'):$e
if $e < 0.5 then
   create('frHX','flag')
endif
setvalue('frHX','dec')  

exists('chHX','parameter'):$e
if $e < 0.5 then
   create('chHX','flag')
endif 

exists('aHhx','parameter'):$e
if $e < 0.5 then
   create('aHhx','real')
   setlimit('aHhx',4095,0,1)
endif 

exists('aXhx','parameter'):$e
if $e < 0.5 then
   create('aXhx','real')
   setlimit('aXhx',4095,0,1)
endif 

exists('bHX','parameter'):$e
if $e < 0.5 then
   create('bHX','real')
   setlimit('bHX',1000000,0,1.0e-6)
endif 

exists('dHX','parameter'):$e
if $e < 0.5 then
   create('dHX','real')
   setlimit('dHX',4095,-4095,1)
endif 

exists('tHX','parameter'):$e
if $e < 0.5 then
   create('tHX','pulse')
   setlimit('tHX',500000,0,0.0125)
endif

exists('ofHX','parameter'):$e
if $e < 0.5 then
    create('ofHX','frequency')
endif  

//======
//soft pulses on X
//======
exists('softpul','parameter'):$e
if $e < 0.5 then
    create('softpul','flag')
endif
setvalue('softpul','n')

exists('chXshp1','parameter'):$e
if $e < 0.5 then
   create('chXshp1','flag')
endif 
setvalue('chXshp1','obs')

exists('wvXshp1','parameter'):$e
if $e < 0.5 then
   create('wvXshp1','flag')
   setvalue('wvXshp1','rsnob')
endif 

exists('ofXshp1','parameter'):$e
if $e < 0.5 then
   create('ofXshp1','frequency')
endif 

exists('aXshp1','parameter'):$e
if $e < 0.5 then
   create('aXshp1','real')
   setlimit('aXshp1',4095,0,1)
endif 

exists('dbXshp1','parameter'):$e
if $e < 0.5 then
   create('dbXshp1','real')
   setlimit('dbXshp1',63,-16,1)
endif 

exists('stXshp1','parameter'):$e
if $e < 0.5 then
   create('stXshp1','real')
endif 

exists('pwXshp1','parameter'):$e
if $e < 0.5 then
   create('pwXshp1','pulse')
   setlimit('pwXshp1',8192,0,0.0125)
endif 

exists('phXshp1','parameter'):$e
if $e < 0.5 then
    create('phXshp1','real')
    setlimit('phXshp1',180,-180,0.0)
endif

exists('softpul2','parameter'):$e
if $e < 0.5 then
    create('softpul2','flag')
endif
setvalue('softpul2','n')

exists('chXshp2','parameter'):$e
if $e < 0.5 then
   create('chXshp2','flag')
endif 
setvalue('chXshp2','obs')

exists('wvXshp2','parameter'):$e
if $e < 0.5 then
   create('wvXshp2','flag')
   setvalue('wvXshp2','rsnob')
endif 

exists('ofXshp2','parameter'):$e
if $e < 0.5 then
   create('ofXshp2','frequency')
endif 

exists('aXshp2','parameter'):$e
if $e < 0.5 then
   create('aXshp2','real')
   setlimit('aXshp2',4095,0,1)
endif 

exists('dbXshp2','parameter'):$e
if $e < 0.5 then
   create('dbXshp2','real')
   setlimit('dbXshp2',63,-16,1)
endif 

exists('stXshp2','parameter'):$e
if $e < 0.5 then
   create('stXshp2','real')
endif 

exists('pwXshp2','parameter'):$e
if $e < 0.5 then
   create('pwXshp2','pulse')
   setlimit('pwXshp2',8192,0,0.0125)
endif 

exists('phXshp2','parameter'):$e
if $e < 0.5 then
    create('phXshp2','real')
    setlimit('phXshp2',180,-180,0.0)
endif

//=====================
// decoupling options
//======================

exists('Hseq','parameter'):$e
if $e < 0.5 then
    create('Hseq','flag')
    setvalue('Hseq','spinal')
endif

//-----------
// tppm
//-----------

exists('aHtppm','parameter'):$e
if $e < 0.5 then
    create('aHtppm','real')
    setlimit('aHtppm',4095,0,1)
endif

exists('pwHtppm','parameter'):$e
if $e < 0.5 then
    create('pwHtppm','pulse')
    setlimit('pwHtppm',8192,0,0.0125)
endif

exists('phHtppm','parameter'):$e
if $e < 0.5 then
    create('phHtppm','real')
    setlimit('phHtppm',180,-180,0.0)
endif

exists('chHtppm','parameter'):$e
if $e < 0.5 then
   create('chHtppm','flag')
endif 
setvalue('chHtppm','dec')

//------------------------------
//  spinal 
//------------------------------

exists('aHspinal','parameter'):$e
if $e < 0.5 then
    create('aHspinal','real')
    setlimit('aHspinal',4095,0,1)
endif

exists('pwHspinal','parameter'):$e
if $e < 0.5 then
    create('pwHspinal','pulse')
    setlimit('pwHspinal',8192,0,0.0125)
endif

exists('phHspinal','parameter'):$e
if $e < 0.5 then
    create('phHspinal','real')
    setlimit('phHspinal',180,-180,0.0)
endif

exists('alpHspinal','parameter'):$e
if $e < 0.5 then
    create('alpHspinal','real')
    setlimit('alpHspinal',180,-180,0.0)
endif

exists('chHspinal','parameter'):$e
if $e < 0.5 then
   create('chHspinal','flag')
endif 
setvalue('chHspinal','dec')

//---------------
//  Mix Period X 
//---------------

exists('mMix','parameter'):$e
if $e < 0.5 then
    create('mMix','flag')
endif
if mMix='' then
 mMix='rad'
endif

exists('mMix1','parameter'):$e
if $e < 0.5 then
    create('mMix1','flag')
endif
if mMix1='' then
 mMix1='rad'
endif

exists('mMix2','parameter'):$e
if $e < 0.5 then
    create('mMix2','flag')
endif
if mMix2='' then
 mMix2='rad'
endif

exists('aHmix','parameter'):$e
if $e < 0.5 then
   create('aHmix','real')
endif 
   setlimit('aHmix',1000,0,1)

exists('tXmix','parameter'):$e
if $e < 0.5 then
   create('tXmix','pulse')
   setlimit('tXmix',100000,0.0,0.0125)
endif
if tXmix<1 then 
 tXmix=1e3
endif

exists('tXmix1','parameter'):$e
if $e < 0.5 then
   create('tXmix1','pulse')
   setlimit('tXmix1',500000,0.0,0.0125)
endif
if tXmix1<1 then
 tXmix1=1e3
endif

exists('tXmix2','parameter'):$e
if $e < 0.5 then
   create('tXmix2','pulse')
   setlimit('tXmix2',100000,0.0,0.0125)
endif
if tXmix2<1 then
 tXmix2=1e3
endif

exists('tRF','parameter'):$e
if $e < 0.5 then
   create('tRF','pulse')
endif
setlimit('tRF',20000,0.0,0.0125)

//==================
// SPC5 ELEMENTS
//==================

exists('spc5_flag','parameter'):$e
if $e < 0.5 then
    create('spc5_flag','flag')
    setvalue('spc5_flag','1')
endif

exists('qXspc5','parameter'):$e
if $e < 0.5 then
   create('qXspc5','real')
   setlimit('qXspc5',64,0,1)
   qXspc5 = 7.0
endif 

exists('chXspc5','parameter'):$e
if $e < 0.5 then
   create('chXspc5','flag')
endif 
setvalue('chXspc5','obs')

exists('ofXspc5','parameter'):$e
if $e < 0.5 then
   create('ofXspc5','frequency')
endif 

exists('aXspc5','parameter'):$e
if $e < 0.5 then
   create('aXspc5','real')
   setlimit('aXspc5',4095,0,1)
endif 

exists('pwXspc5','parameter'):$e
if $e < 0.5 then
   create('pwXspc5','pulse')
   setlimit('pwXspc5',8192,0,0.0125)
endif 

exists('tZF','parameter'):$e
if $e < 0.5 then
   create('tZF','pulse')
   setlimit('tZF',8192,0,0.0125)
endif 

exists('aHZF','parameter'):$e
if $e < 0.5 then
   create('aHZF','real')
   setlimit('aHZF',4095,0,1)
endif 
//=============================
// CW 1H decoupling during SPC5
//=============================

exists('aHmixspc5','parameter'):$e
if $e < 0.5 then
   create('aHmixspc5','real')
   setlimit('aHmixspc5',4095,0,1)
endif 

//=============================
// PAR Mixing
//=============================
exists('aHpar','parameter'):$e
if $e < 0.5 then
   create('aHpar','real')
   setlimit('aHpar',4095,0,1)
endif 

exists('aXpar','parameter'):$e
if $e < 0.5 then
   create('aXpar','real')
   setlimit('aXpar',4095,0,1)
endif 

exists('tPAR','parameter'):$e
if $e < 0.5 then
   create('tPAR','pulse')
   setlimit('tPAR',50000,0,0.0125)
endif 

exists('aHpar1','parameter'):$e
if $e < 0.5 then
   create('aHpar1','real')
   setlimit('aHpar1',4095,0,1)
endif 

exists('aXpar1','parameter'):$e
if $e < 0.5 then
   create('aXpar1','real')
   setlimit('aXpar1',4095,0,1)
endif 

exists('tPAR1','parameter'):$e
if $e < 0.5 then
   create('tPAR1','pulse')
   setlimit('tPAR1',50000,0,0.0125)
endif 


//==================
// C7 ELEMENTS
//==================

exists('c7_flag','parameter'):$e
if $e < 0.5 then
    create('c7_flag','flag')
    setvalue('c7_flag','1')
endif

exists('qXc7','parameter'):$e
if $e < 0.5 then
   create('qXc7','real')
   setlimit('qXc7',64,0,1)
   qXc7 = 7.0
endif 

exists('chXc7','parameter'):$e
if $e < 0.5 then
   create('chXc7','flag')
endif 
setvalue('chXc7','obs')

exists('ofXc7','parameter'):$e
if $e < 0.5 then
   create('ofXc7','frequency')
endif 

exists('aXc7','parameter'):$e
if $e < 0.5 then
   create('aXc7','real')
   setlimit('aXc7',4095,0,1)
endif 

exists('pwXc7','parameter'):$e
if $e < 0.5 then
   create('pwXc7','pulse')
   setlimit('pwXc7',8192,0,0.0125)
endif 


//=============================
// CW 1H decoupling during C7
//=============================

exists('aHmixc7','parameter'):$e
if $e < 0.5 then
   create('aHmixc7','real')
   setlimit('aHmixc7',4095,0,1)
endif 


//==================
// SPCN ELEMENTS
//==================

exists('dqf_flag','parameter'):$e
if $e < 0.5 then
    create('dqf_flag','flag')
    setvalue('dqf_flag','1')
endif

exists('qXspcn','parameter'):$e
if $e < 0.5 then
   create('qXspcn','real')
   setlimit('qXspcn',200,0,1)
   qXspcn = 5.0
endif 

exists('chXspcn','parameter'):$e
if $e < 0.5 then
   create('chXspcn','flag')
endif 
setvalue('chXspcn','obs')

exists('ofXspcn','parameter'):$e
if $e < 0.5 then
   create('ofXspcn','frequency')
endif 

exists('aXspcn','parameter'):$e
if $e < 0.5 then
   create('aXspcn','real')
   setlimit('aXspcn',4095,0,1)
endif 

exists('pwXspcn','parameter'):$e
if $e < 0.5 then
   create('pwXspcn','pulse')
   setlimit('pwXspcn',8192,0,0.0125)
endif 

exists('NXspcn','parameter'):$e
if $e < 0.5 then
   create('NXspcn','real')
   setlimit('NXspcn',200,0,1)
   NXspcn = 5.0
endif 

//=============================
// CW 1H decoupling during SPCN
//=============================

exists('aHmixspcn','parameter'):$e
if $e < 0.5 then
   create('aHmixspcn','real')
   setlimit('aHmixspcn',4095,0,1)
endif 

//==================
// PARIS ELEMENTS
//==================

exists('chHparis','parameter'):$e
if $e < 0.5 then
   create('chHparis','flag')
endif 
setvalue('chHparis','dec')

exists('ofHparis','parameter'):$e
if $e < 0.5 then
   create('ofHparis','frequency')
endif 

exists('aHparis','parameter'):$e
if $e < 0.5 then
   create('aHparis','real')
   setlimit('aHparis',4095,0,1)
endif 

exists('pwHparis','parameter'):$e
if $e < 0.5 then
   create('pwHparis','pulse')
   setlimit('pwHparis',8192,0,0.0125)
endif 

//==================
// rfdr ELEMENTS
//==================

exists('chXrfdr','parameter'):$e
if $e < 0.5 then
   create('chXrfdr','flag')
endif 
setvalue('chXrfdr','obs')

exists('ofXrfdr','parameter'):$e
if $e < 0.5 then
   create('ofXrfdr','frequency')
endif 

exists('qXrfdr','parameter'):$e
if $e < 0.5 then
   create('qXrfdr','real')
   setlimit('qXrfdr',64,0,1)
endif 

exists('aXrfdr','parameter'):$e
if $e < 0.5 then
   create('aXrfdr','real')
   setlimit('aXrfdr',4095,0,1)
endif 

exists('aHrfdr','parameter'):$e
if $e < 0.5 then
   create('aHrfdr','real')
   setlimit('aHrfdr',4095,0,1)
endif 

exists('pwXrfdr','parameter'):$e
if $e < 0.5 then
   create('pwXrfdr','pulse')
   setlimit('pwXrfdr',8192,0,0.0125)
endif 

// --------------------------------------------------
// NUS parameters
// --------------------------------------------------
//
exists('SPARSE','parameter'):$e
if $e < 0.5 then
    create('SPARSE','string')
    setenumeral('SPARSE',2,'y','n')
    setvalue('SPARSE','n')
endif

exists('sparse_file','parameter'):$e
if $e < 0.5 then
    create('sparse_file','string')
    setvalue('sparse_file','/home/rienstra/vnmrsys/nus_sched/hXXX_S.hdr_3')
endif

exists('nimax_s','parameter'):$e
if $e < 0.5 then
    create('nimax_s','integer')
    setvalue('nimax_s',0)
    setlimit('nimax_s',1024,0,1)
endif

exists('ni2max_s','parameter'):$e
if $e < 0.5 then
    create('ni2max_s','integer')
    setvalue('ni2max_s',0)
    setlimit('ni2max_s',1024,0,1)
endif

exists('ni3max_s','parameter'):$e
if $e < 0.5 then
    create('ni3max_s','integer')
    setvalue('ni3max_s',0)
    setlimit('ni3max_s',1024,0,1)
endif

// --------------------------------------------------
// Set parameters specific to the experiment
// --------------------------------------------------
//
exists('wrtp','parameter'):$e
if ($e < 0.5) then 
   create('wrtp','string')
endif
wrtp = 'reset_spc5'
//reset_spc5
//
exists('wrtpc7','parameter'):$e
if ($e < 0.5) then 
   create('wrtpc7','string')
endif
wrtpc7 = 'reset_c7'
//reset_c7

//------------------------------------------------
//  Set Bit 14 for new parameters of the .par file 
//------------------------------------------------

$params = 'frHX toHX chHspinal chHtppm chXc7 chXspc5 '
$params = $params + 'aHmix aHmixc7 qXc7 ofXc7 aXc7 pwXc7 tXmix qXspc5 ofXspc5 aXspc5 pwXspc5 tZF aHmixspc5 wrtp wrtpc7 aHpar aXpar tPAR'
setprotect('','clear',16384)
setprotect($params,'on',16384)

//--------------------------------------------------------
//  Clear parameters in 'clearparams' in the apptype macro
//--------------------------------------------------------

exists('clearparams','parameter'):$e
if $e < 0.5 then
   create('clearparams','string')
endif
setprotect('clearparams','on',16384)
$clearparams = 'frHX toHX chHspinal chHtppm chXc7 chXspc5'
setvalue('clearparams',$clearparams)

//------------------------------------------------
//  Set the parameter templates
//------------------------------------------------

setprotect('dg','clear',4)
$dg = '1:ACQUISITION:sw:1,at:6,np:0,d1:6,nt:0,ct:0,bs:0,'
$dg = $dg + 'ss:0,rd:1,ad:1,ddrtc:1,rof3(rof3):1,gain:0,temp:0,srate:1;'
$dg = $dg + '2:cpHX:shHX,chHX,aHhx:0,aXhx:0,bHX:6,dHX:6,tHX:1,ofHX:3;'
$dg = $dg + '2(Hseq=\'tppm\'):TPPM:aHtppm:0,pwHtppm:1,phHtppm:2;'
$dg = $dg + '2(Hseq=\'spinal\'):SPINAL:aHspinal:0,pwHspinal:1,phHspinal:2;'
$dg = $dg + '3(mMix=\'spc5\'):spc5X:aXspc5:0,pwXspc5:1,qXspc5:0,ofXspc5:1,tZF:1,aHmixspc5:0;'
$dg = $dg + '3(mMix=\'c7\'):c7X:aXc7:0,pwXc7:1,qXc7:0,ofXc7:1,tZF:1,aHmixc7:0;'
$dg = $dg + '3(mMix=\'rad\'):RAD MIXING:aHmix:1,tXmix:1,tXmix1:1,tXmix2:1;'
$dg = $dg + '3(mMix=\'PAR\'):PAR MIXING:tPAR:1,tPAR1:1,aHpar:1,aHpar1:1,aXpar:1,aXpar1:1;'
$dg = $dg + '4:DIGITIZATION:d1:1,d2:6,d3:6,d4:6,ni,ni2,ni3,nrows,sw1,sw2,sw3,nimax_s,ni2max_s,ni3max_s,ndim,skiprows;'
dg = $dg
setprotect('dg','on',4)

setprotect('dg2','clear',4)
$dg2 = '1:OBSERVE:tn,sfrq:6,tof:1,tpwr:0,aX90:0,pwX90:1;'
$dg2=$dg2+'2:DECOUPLE:dn,dfrq:6,dof:1,dpwr:0,aH90:0,pwH90:1;'
$dg2=$dg2+'3:DECOUPLE2:dn2,dfrq2:6,dof2:1,dpwr2:0,aY90:0,pwY90:1;'
$dg2 = $dg2 + '4:DIGITIZATION:ni,ni2,ni3,nrows,sw1,sw2,sw3,nimax_s,ni2max_s,ni3max_s,ndim,skiprows;'
dg2 = $dg2
setprotect('dg2','on',4)

setprotect('ap','clear',4)
$ap = '1:SAMPLE:date,temp:1,srate:1,file;'
$ap = $ap + '1:ACQUISITION:tn,sfrq:6,tof:1,tpwr:0,sw:1,at:6,np:0,d1:6,nt:0,ct:0,ss:0,rd:1,ad:1,aX90:0,pwX90:1;'
$ap = $ap + '1(ni):2D ACQUISITION:d2:6,sw1:1,ni:0,phase:0;'
$ap = $ap + '1:DECOUPLE:dn,dfrq:6,dof:1,dpwr:0,aH90:0,pwH90:1;'
$ap = $ap + '1(dfrq2>0):DECOUPLE2:dn2,dfrq2:6,dof2:1,dpwr2:0,aY90:0,pwY90:1;'
$ap = $ap + '1(dfrq3>0):DECOUPLE3:dn3,dfrq3:6,dof3:1,dpwr3:0,aZ90:0,pwZ90:1;'
$ap = $ap + '1:cpHX:shHX,chHX,aHhx:0,aXhx:0,bHX:6,dHX:6,tHX:1,ofHX:3;'
$ap = $ap + '1(mMix=\'rad\'):RAD MIXING:aHmix:1,tXmix:1;tXmix1:1;tXmix2:1'
$ap = $ap + '2:(mMix=\'spc5\'):spc5X:aXspc5:0,pwXspc5:1,qXspc5:0,ofXspc5:1,tZF:1,aHmixspc5:0;'
$ap = $ap + '3(mMix=\'c7\'):c7X:aXc7:0,pwXc7:1,qXc7:0,ofXc7:1,tZF:1,aHmixc7:0;'
$ap = $ap + '4(mMix=\'PAR\'):PAR MIXING:tPAR:1,tPAR1:1,aHpar:1,aHpar1:1,aXpar:1,aXpar1:1;'
$ap = $ap + '1(Hseq=\'tppm\'):TPPM:aHtppm:0,pwHtppm:1,phHtppm:2;'
$ap = $ap + '1(Hseq=\'spinal\'):SPINAL:aHspinal:0,pwHspinal:1,phHspinal:2;'
ap = $ap
setvalue('ap',$ap,'processed')
setprotect('ap','on',4)
